proc spikeout() {local i, rank  localobj f				// Write out a spike raster (cell, spike time)
	pc.barrier()									// Wait for all ranks to get to this point
	sprint(cmd,"./results/%s/spikeraster.dat", RunName)
	f = new File(cmd)
	if (pc.id == 0) { 								// Write header to file 1 time only
		f.wopen()
		f.close()
	}
	
	for rank = 0, pc.nhost-1 {				// For each processor, allow processor to append to file the spike times of its cells
		if (rank == pc.id) {				// Ensure that each processor runs once
			f.aopen() 						// Open for appending to file
			for i=0, pnm.idvec.size-1 {
				f.printf("%.3f %d\n", pnm.spikevec.x[i], pnm.idvec.x[i])	// Print the spike time and spiking cell gid
			}
			f.close()
		}
		pc.barrier()
	}
}


proc sumnumout() {local alltime, allct, allspk localobj f
	allct = pc.allreduce(nclist.count,1)
	allspk = pc.allreduce(pnm.idvec.size,1)
	if (pc.id == 0) { 								// Write header to file 1 time only
		alltime = startsw() - loadstart
		sprint(cmd,"./results/%s/sumnumout.txt", RunName)
		f = new File(cmd)
		f.wopen()
			f.printf("NumCells = %g;\nNumSpikes = %g;\nNumConnections = %g;\nRunTime = %g;\nNumCellTypes = %g;\n", ncell, allspk, allct, alltime, numCellTypes)	// Print the spike time and spiking cell gid
		f.close()
	}
}

proc timeout() {local i, rank, gid, srcid localobj tgt, f, cell// Write out runtimes for each processor
	pc.barrier()					// Wait for all ranks to get to this point
	sprint(cmd,"./results/%s/runtimes.dat", RunName)
	f = new File(cmd)
	if (pc.id == 0) { 				// Write header to file 1 time only
		f.wopen()
		f.printf("host\tset up\tcreated cells\tconnected cells\tran simulation\t\n")
		f.close()
	}
	
	for rank = 0, pc.nhost-1 {				// For each processor, allow processor to append its runtimes to file
		if (rank == pc.id) {				// Ensure that each processor runs once
			f.aopen() 						// Open for appending to file
			f.printf("%g\t%g\t%g\t%g\t%g\n", pc.id, loadtime, createtime, connecttime, runtime)
			f.close()
		}
		pc.barrier()
	}
}
/*
objref f
proc voltageout() {local tr, rank, gid, srcid localobj tgt// Write out voltage traces for some cells
	for tr = 0, numtraces-1 {
		if (pc.gid_exists(traceidxlist.x[tr])) {	// If cell exists on this machine
			sprint(outfile, "results/%s/trace_%s%g.dat", RunName, tracenamelist[tr].s, traceidxlist.x[tr])
			f = new File(outfile)
			f.wopen()
			f.printf("t\tv\n")
			for i=0, (tstop-tstart)/dt-1 {
				sprint(cmdstr, "f.printf(\"%%g\\t%%g\\n\", i*dt, %s%g.x[i])", tracenamelist[tr].s, tracepclist.x[tr], i)
				execute(cmdstr)
			}
			f.close()
		}
	}
}
*/
