/************************************************************
'ca1' model code repository
Written by Marianne Bezaire, marianne.bezaire@gmail.com, www.mariannebezaire.com
In the lab of Ivan Soltesz, www.ivansolteszlab.org
Published and latest versions of this code are available online at:
ModelDB: 
Open Source Brain: http://www.opensourcebrain.org/projects/nc_ca1

This file defines two procedures related to spontaneous stimulation:
1. connectStims: this is used when each cell needs to have its own,
   unique excitatory spike train input. This procedure connects
   a specific artificial cell to each real cell of the model, so that
   each real cell has its own independent input. When this procedure
   is used, then the artificial cells should NOT be connected to the
   real cells within the connectivity algorithm. If the connectivity
   algorithm is used instead, the difference is that any particular
   artificial cell could be connected to 0, 1, or multiple real cells
   in lines with whatever positioning and axonal distribution properties
   have been specified. This is a good alternative for when the
   artificial cells are meant to mimic real inputs to a network.
2. setNoise: this procedure sets the properties of the random number
   generators that are then associated to the noise functionality of
   the artificial cells. Each artificial cell has its own, unique
   random stream that is associated to its noise algorithm. The noise
   algorithm then draws from that random number stream to determine
   the interspike intervals that define the spike train pattern of the cell.
************************************************************/

// The connectStims procedure connects a specific artificial cell to
// each real cell of the model, and it does this for each artificial
// cell type. It expects there to be enough artificial cells of each
// type that a unique artificial cell can be connected with each real
// cell of the model. The specific artificial cell that is connected
// to each real cell has a gid that is related to the gid of the real
// cell.

proc connectStims() { local wgt, reli, typei, jgid, postcelltype, precelltype localobj cell
    for precelltype=0, numCellTypes-1 {	// For each potential presynaptic cell type
	if (cellType[precelltype].is_art==1) {	// If the cell is an artificial cell type
	    for postcelltype=0, numCellTypes-1 {	// For each potential postsynaptic cell type
		if (cellType[postcelltype].is_art==0) {	// If the cell is a real cell type
		    wgt = cellType[precelltype].wgtConns.x[postcelltype]	// Check the weight specified for this connection
		    if (wgt > 0) {											//  and if stronger than 0, make the connections
			
			// For each cell of type postsynaptic cell type owned by this processor
			for pcitr(&reli, &typei, &jgid, cellType[postcelltype].cellStartGid, cellType[postcelltype].cellEndGid) {
			    if (pc.gid_exists(jgid)) {
				cell = pc.gid2cell(jgid)	// Create a reference to the postsynaptic cell
                                
				if (cell.pre_list.o(precelltype).count()>0) {	// If potential synapses have been defined for this connection type
				    
				    // Make a single synapse connection from a specific artificial cell to a specific real cell, 
				    //  where the cells that are connected are related by their gids.
				    nc_appendo(jgid-cellType[postcelltype].cellEndGid-1+cellType[precelltype].cellStartGid, cell, precelltype, 0, wgt, 3)
				    cellType[precelltype].numCons.x[postcelltype] +=1	// Increment the connection counter
				}
			    }
			}
		    }
		}
	    }
	}
    }
}

if (MakeArtConns==0) {	// Only make connections from artificial cells if they 
    connectStims()      //  have not been connected at another time (ie, in the
}		//  connectivity algorithm)

proc setVecStim() {local sendpos, celltype_idx, startgid, endgid, numCells localobj f, vptr, vspiketimes, vactive, vsizes, vcellspikes, cell strdef vecstim_ptr_filename, vecstim_filename, vecstim_active_filename
    
    
    for celltype=0, numCellTypes-1 {
        
        celltype_idx=-1
        vptr       = new Vector()
        vspiketimes  = new Vector()
        vsizes       = new Vector()
        vactive      = new Vector()
        
        if (strcmp(cellType[celltype].technicalType, "ppvec")==0) {
	    celltype_idx = celltype 
        }
        
        if (celltype_idx > -1) {
            
            print "vecstim: cellType[celltype].technicalType = ", cellType[celltype].cellType_string
            
            startgid = cellType[celltype_idx].cellStartGid
            endgid = cellType[celltype_idx].cellEndGid
            numCells = cellType[celltype_idx].numCells
            
            if (pc.id == 0) {
                
                if (VecStimData > 0) {
                    sprint(vecstim_ptr_filename,"%s_%d_vecstim_ptr.bin",cellType[celltype_idx].cellType_string,VecStimData)
                    sprint(vecstim_filename,"%s_%d_vecstim.bin",cellType[celltype_idx].cellType_string,VecStimData)
                } else {
                    sprint(vecstim_ptr_filename,"%s_vecstim_ptr.bin",cellType[celltype_idx].cellType_string)
                    sprint(vecstim_filename,"%s_vecstim.bin",cellType[celltype_idx].cellType_string)
                }
                if (VecStimActiveData > 0) {
                    sprint(vecstim_active_filename,"%s_%d_vecstim_active.bin",cellType[celltype_idx].cellType_string,VecStimActive)
                } else {
                    sprint(vecstim_active_filename,"%s_vecstim_active.bin",cellType[celltype_idx].cellType_string)
                }
                
                f = new File ()
                
                status = f.ropen (vecstim_ptr_filename)
                vptr.vread(f)
                f.close()
                
                status = f.ropen (vecstim_filename)
                vspiketimes.vread(f)
                f.close()
                
                status = f.ropen (vecstim_active_filename)
                if (status > 0) {
                    vactive.vread(f)
                } else {
                    // if active file does not exist, assume all cells are active
                    vactive.resize(vptr.size())
                    vactive.fill(1)
                }
                
                f.close()
                
                vsizes.resize(vptr.size())
                for (i=0; i < vptr.size()-1; i+=1) {
                    vsizes.x[i] = vptr.x[i+1] - vptr.x[i]
                }
                vsizes.x[vptr.size()-1] = vspiketimes.size() - vptr.x[vptr.size()-1]
            }
            
            // send out the number of spike entries each rank is going to receive
            pc.broadcast(vsizes, 0)
            pc.broadcast(vptr, 0)
            pc.broadcast(vspiketimes, 0)
            pc.broadcast(vactive, 0)
            
            for (i=0; i < vptr.size(); i+=1) {
	        gid = startgid + i
		if ((i<numCells) && pc.gid_exists(gid) && (vactive.x[i] > 0)) {
		   if (vsizes.x[i] > 0) {
		       vcellspikes = new Vector()
  		       vcellspikes.copy(vspiketimes, 0, vptr.x[i], vptr.x[i]+vsizes.x[i]-1)
		       cell = pc.gid2cell(gid)
                       cell.play(vcellspikes)
		      }	
		}
	    }
        }
    }
}

setVecStim()
